# Auto-generated include chain for patient CT.
# Table source: /Users/jiangzhenmin/Desktop/PLAN1699_副本/machine_model/HUtoMaterialSchneider.txt
# SHA-256: 5022cd89617b28dbd8ee8bf8b095ea20cfd99f6405218693c0df238b3617a139
# Generic reference table; replace only after institutional review/commissioning.

includeFile = geometry/world.txt

# Topas parameter settings for conversion of Hounsfield Units to materials using the Schneider paper

s:Ge/Patient/ImagingToMaterialConverter = "Schneider"

# Correction Factor for the relative stopping power of Geant4 and the XiO planning system:
dv:Ge/Patient/DensityCorrection = 3996 9.35212 5.55269 4.14652 3.41395 2.9645 2.66061 2.44144 2.27588 2.1464 2.04239 1.95698 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1.00275 g/cm3

# Formula: Density = (Offset + (Factor*(FactorOffset + HU[-1000,2995] ))) * DensityCorrection
iv:Ge/Patient/SchneiderHounsfieldUnitSections = 8 -1000 -98 15 23 101 2001 2995 2996
uv:Ge/Patient/SchneiderDensityOffset = 7 0.00121 1.018 1.03 1.003 1.017 2.201 4.54
uv:Ge/Patient/SchneiderDensityFactor = 7 0.001029700665188 0.000893 0.0 0.001169 0.000592 0.0005 0.0
uv:Ge/Patient/SchneiderDensityFactorOffset = 7 1000. 0. 1000. 0. 0. -2000. 0.

# Define Materials used for HU
sv:Ge/Patient/SchneiderElements = 13 "Hydrogen" "Carbon" "Nitrogen" "Oxygen" "Magnesium" "Phosphorus" "Sulfur" "Chlorine" "Argon" "Calcium" "Sodium" "Potassium" "Titanium"
iv:Ge/Patient/SchneiderHUToMaterialSections = 26 -1000 -950 -120 -83 -53 -23 7 18 80 120 200 300 400 500 600 700 800 900 1000 1100 1200 1300 1400 1500 2995 2996
uv:Ge/Patient/SchneiderMaterialsWeight1  = 13 0.0      0.0    0.755    0.232  0.0       0.0       0.0    0.0      0.013  0.0	 0.0    0.0	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight2  = 13 0.103    0.105  0.031    0.749  0.0       0.002     0.003  0.003    0.0    0.0	 0.002  0.002	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight3  = 13 0.116    0.681  0.002    0.198  0.0       0.0       0.001  0.001    0.0    0.0	 0.001  0.0	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight4  = 13 0.113    0.567  0.009    0.308  0.0       0.0       0.001  0.001    0.0    0.0	 0.001  0.0	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight5  = 13 0.110    0.458  0.015    0.411  0.0       0.001     0.002  0.002    0.0    0.0     0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight6  = 13 0.108    0.356  0.022    0.509  0.0       0.001     0.002  0.002    0.0    0.0     0.0    0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight7  = 13 0.106    0.284  0.026    0.578  0.0       0.001     0.002  0.002    0.0    0.0     0.0    0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight8  = 13 0.103    0.134  0.030    0.723  0.0       0.002     0.002  0.002    0.0    0.0     0.002  0.002     0.0
uv:Ge/Patient/SchneiderMaterialsWeight9  = 13 0.094    0.207  0.062    0.622  0.0       0.0       0.006  0.003    0.0    0.0     0.006  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight10 = 13 0.095    0.455  0.025    0.355  0.0       0.021     0.001	 0.001	  0.0    0.045   0.001  0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight11 = 13 0.089    0.423  0.027    0.363  0.0       0.030	  0.001	 0.001	  0.0    0.064   0.001  0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight12 = 13 0.082    0.391  0.029    0.372  0.0       0.039	  0.001	 0.001	  0.0    0.083   0.001  0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight13 = 13 0.076    0.361  0.030    0.380  0.001     0.047	  0.002	 0.001	  0.0    0.101   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight14 = 13 0.071    0.335  0.032    0.387  0.001     0.054	  0.002	 0.0	  0.0    0.117   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight15 = 13 0.066    0.310  0.033    0.394  0.001     0.061	  0.002	 0.0	  0.0    0.132   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight16 = 13 0.061    0.287  0.035    0.400  0.001     0.067	  0.002	 0.0	  0.0    0.146   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight17 = 13 0.056    0.265  0.036    0.405  0.002     0.073	  0.003	 0.0	  0.0    0.159   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight18 = 13 0.052    0.246  0.037    0.411  0.002     0.078	  0.003	 0.0	  0.0    0.170   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight19 = 13 0.049    0.227  0.038    0.416  0.002     0.083	  0.003	 0.0	  0.0    0.181   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight20 = 13 0.045    0.210  0.039    0.420  0.002     0.088	  0.003	 0.0	  0.0    0.192   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight21 = 13 0.042    0.194  0.040    0.425  0.002     0.092	  0.003	 0.0	  0.0    0.201   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight22 = 13 0.039    0.179  0.041    0.429  0.002     0.096	  0.003	 0.0	  0.0    0.210   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight23 = 13 0.036    0.165  0.042    0.432  0.002     0.100	  0.003	 0.0	  0.0    0.219   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight24 = 13 0.034    0.155  0.042    0.435  0.002     0.103	  0.003	 0.0	  0.0    0.225   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight25 = 13 0.0      0.0    0.0      0.0    0.0       0.0	  0.0	 0.0	  0.0    0.0     0.0    0.0       1.0

iv:Gr/Color/PatientTissue1 = 3  63  63  63
iv:Gr/Color/PatientTissue2 = 3 100   0   0
iv:Gr/Color/PatientTissue3 = 3 100  30   0
iv:Gr/Color/PatientTissue4 = 3 100  60   0
iv:Gr/Color/PatientTissue5 = 3 100  90   0
iv:Gr/Color/PatientTissue6 = 3 100 120   0
iv:Gr/Color/PatientTissue7 = 3 100 150   0
iv:Gr/Color/PatientTissue8 = 3 100 180   0
iv:Gr/Color/PatientTissue9 = 3 100 210   0
iv:Gr/Color/PatientTissue10= 3 100 240   0
iv:Gr/Color/PatientTissue11= 3 200 200   0
iv:Gr/Color/PatientTissue12= 3 200 200  30
iv:Gr/Color/PatientTissue13= 3 200 200  60
iv:Gr/Color/PatientTissue14= 3 200 200  90
iv:Gr/Color/PatientTissue15= 3 200 200 120
iv:Gr/Color/PatientTissue16= 3 200 200 150
iv:Gr/Color/PatientTissue17= 3 200 200 180
iv:Gr/Color/PatientTissue18= 3 200 200 210
iv:Gr/Color/PatientTissue19= 3 200 200 240
iv:Gr/Color/PatientTissue20= 3 230 200 240
iv:Gr/Color/PatientTissue21= 3 230 230 240
iv:Gr/Color/PatientTissue22= 3 230 230 240
iv:Gr/Color/PatientTissue23= 3 240 240 240
iv:Gr/Color/PatientTissue24= 3 255 255 255
iv:Gr/Color/PatientTissue25= 3 100 100 100
